PsychoPy2experiment version="2024.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1366, 768]
  expName = Word Priming Experiment
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial
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    TextComponent StudyText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent Studyslider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
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    TextComponent TestText
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test_word
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    TextboxComponent test_textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to Submit
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    MouseComponent testmouse
      clickable = text
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/Riya Joshi/OneDrive/Desktop/study_word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'book'},
      {'study_word': 'cushion'},
      {'study_word': 'phone'},
      {'study_word': 'marble'},
      {'study_word': 'board'},
      {'study_word': 'laptop '},
      {'study_word': 'chart'},
      {'study_word': 't-shirt'},
      {'study_word': 'mouse'},
      {'study_word': 'pastry'},
      {'study_word': 'case'},
      {'study_word': 'cruise'},
      {'study_word': 'police'},
      {'study_word': 'keys'},
      {'study_word': 'poster'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = C:/Users/Riya Joshi/OneDrive/Desktop/test_word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test_word': 'l_pt_p', 'Refrence': 'laptop', 'Primed_NonPrimed': 'primed'},
      {'test_word': '_ha_t', 'Refrence': 'chart', 'Primed_NonPrimed': 'primed'},
      {'test_word': 't_hi_t', 'Refrence': 'tshirt', 'Primed_NonPrimed': 'primed'},
      {'test_word': '_ou_se', 'Refrence': 'mouse', 'Primed_NonPrimed': 'primed'},
      {'test_word': 'p_as_tr_', 'Refrence': 'pastry', 'Primed_NonPrimed': 'primed'},
      {'test_word': 'c_s_', 'Refrence': 'case', 'Primed_NonPrimed': 'primed'},
      {'test_word': '_ru_is_', 'Refrence': 'cruise', 'Primed_NonPrimed': 'primed'},
      {'test_word': 'p_li_e', 'Refrence': 'police', 'Primed_NonPrimed': 'primed'},
      {'test_word': 'k_y_', 'Refrence': 'keys', 'Primed_NonPrimed': 'primed'},
      {'test_word': 'p_st_r', 'Refrence': 'poster', 'Primed_NonPrimed': 'primed'},
      {'test_word': '_o_rd', 'Refrence': 'board', 'Primed_NonPrimed': 'primed'},
      {'test_word': '_a_ble_', 'Refrence': 'marble', 'Primed_NonPrimed': 'primed'},
      {'test_word': '_ho_e', 'Refrence': 'phone', 'Primed_NonPrimed': 'primed'},
      {'test_word': '_oo_', 'Refrence': 'book', 'Primed_NonPrimed': 'primed'},
      {'test_word': 'c_s_io_', 'Refrence': 'cushion', 'Primed_NonPrimed': 'primed'},
      {'test_word': 'ta_l_', 'Refrence': 'table', 'Primed_NonPrimed': 'non-primed'},
      {'test_word': 'p_nc_l', 'Refrence': 'pencil', 'Primed_NonPrimed': 'non-primed'},
      {'test_word': 'v_s_', 'Refrence': 'vase', 'Primed_NonPrimed': 'non-primed'},
      {'test_word': 'bo_t_e', 'Refrence': 'bottle', 'Primed_NonPrimed': 'non-primed'}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
    Routine test
  LoopTerminator trials_2
