PsychoPy2experiment version="2024.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  expName = SoloProject
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine Instructions
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this task, you'll see a set of colored squares. After a brief pause you will see a another set. Your job is to determine if the second set matches the first set. Press 'S' if the set is same and 'D' id the the set is different.

        Press Space key to start the experiment.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine display_phase
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    PolygonComponent rect_1
      fillColor = 1.0000, -1.0000, -1.0000
      pos = (200, 0)
      shape = rectangle
      size = (70, 60)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    PolygonComponent rect_2
      fillColor = -1.0000, 0.0039, -1.0000
      pos = (100,173.2)
      shape = rectangle
      size = (70, 60)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    PolygonComponent rect_3
      fillColor = -1.0000, -1.0000, 1.0000
      pos = (-100, 173.2)
      shape = rectangle
      size = (70, 60)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    PolygonComponent rect_4
      fillColor = 1.0000, 1.0000, -1.0000
      pos = (-200,0)
      shape = rectangle
      size = (70, 60)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    PolygonComponent rect_5
      fillColor = 0.0039, -1.0000, 0.0039
      pos = (-100, -173.2)
      shape = rectangle
      size = (70, 60)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    PolygonComponent rect_6
      fillColor = 1.0000, 0.2941, -1.0000
      pos = (100,-173.2)
      shape = rectangle
      size = (70, 60)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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  Routine retention_interval
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    TextComponent text_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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  Routine test_phase
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    PolygonComponent rect1
      fillColor [set every repeat] = -1.0000, -1.0000, -1.0000
      pos = (200,0)
      shape = rectangle
      size = (70, 60)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    PolygonComponent rect2
      fillColor [set every repeat] = 0.0824, -0.6627, 0.7725
      pos = (100, 173)
      shape = rectangle
      size = (70, 60)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    PolygonComponent rect3
      fillColor = -1.0000, 1.0000, 1.0000
      pos = (-100, 173)
      shape = rectangle
      size = (70, 60)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    PolygonComponent rect4
      fillColor = 1.0000, 1.0000, -1.0000
      pos = (-200,0)
      shape = rectangle
      size = (70, 60)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    PolygonComponent rect5
      fillColor = 0.0039, -1.0000, 0.0039
      pos = (-100,-173)
      shape = rectangle
      size = (70,60)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    PolygonComponent rect6
      fillColor = 1.0000, 0.2941, -1.0000
      pos = (100, -173)
      shape = rectangle
      size = (70, 60)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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  Routine answer
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = If you think that the two sets of rectangles are same then press 's' and if you think that the two sets are different then press 'd'.
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    KeyboardComponent key_resp_2
      allowedKeys = 's', 'd'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 100
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    conditions:
      [{'Trial': 1, 'ChangeRect1': [0, 0, 1], 'ChangeRect2': [0, 0, 0]},
      {'Trial': 2, 'ChangeRect1': [0, 1, 0], 'ChangeRect2': [0, 0, 1]},
      {'Trial': 3, 'ChangeRect1': [0, 0, 0], 'ChangeRect2': [0, 0, 0]},
      {'Trial': 4, 'ChangeRect1': [1, 1, 0], 'ChangeRect2': [0, 0, 0]},
      {'Trial': 5, 'ChangeRect1': [0, 0, 0], 'ChangeRect2': [1, 0, 1]},
      {'Trial': 6, 'ChangeRect1': [0, 1, 1], 'ChangeRect2': [0, 0, 0]}]
    Routine display_phase
    Routine retention_interval
    Routine test_phase
    Routine answer
  LoopTerminator trials
